PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      skipIf = continueButton.clicked
      stopVal [duration (s)] = 30.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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      text:
        Welcome to our 9.60 Project!!!

        You will see a series of faces. The face will be visible for 5 seconds, then disappear. You will then see a slider with a number of age ranges. Use the slider to select their age range based on your best guess of the person's age. Press space once you are comfortable with your choice.

        Press space to continue :)

        Please email sopsahl@mit.edu if you have any difficulties accessing the experiment.

        Thank you!!
    MouseComponent continueButton
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = clicked
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      timeRelativeTo = routine
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  Routine trial
    RoutineSettingsComponent trial
      skipIf = enter
      stopVal [duration (s)] = 10.0
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    ImageComponent image
      image = adversarial_dataset/images/51.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    SliderComponent age_slider
      forceEndRoutine = False
      granularity = 0
      initVal = 1
      labels = (0-9, 10-19, 20-29, 30-39, 40-49, 50-59)
      letterHeight = 0.05
      pos = (0, -20)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = 10.0
      styles = choice
      ticks = (1, 2, 3, 4,5, 6)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      syncScreenRefresh = False
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Press space to confirm your answer
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  Routine terminate
    RoutineSettingsComponent terminate
      skipIf = mouse.clicked
      stopVal [duration (s)] = 10.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thanks for participating in our 9.60 Project!!

        Click anywhere on the screen to terminate :)

        Please email sopsahl@mit.edu if you have any feedback (positive or negative).
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = clicked
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine trial
  LoopTerminator trials
  Routine terminate
