PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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  Routine Instructions
    RoutineSettingsComponent Instructions
      stopVal [condition] = "space"
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        Welcome to our 9.60 Project!!!

        You will see a series of faces. The face will be visible for 5 seconds, then disappear. You will then see a slider with a number of age ranges. Use the slider to select their age range based on your best guess of the person's age. Press space once you are comfortable with your choice.

        Press space to continue :)

        Please email sopsahl@mit.edu if you have any difficulties accessing the experiment.

        Thank you!!
    KeyboardComponent Continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine trial
